PsychoPy2experiment version="2021.1.4"
Settings
  Data filename = u'Data/Psychopy data/%s_%s' % (expInfo['participant'], expName)
  Experiment info = {'participant': '', 'group': ''}
  Full-screen window = True
  Monitor = dellMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1200]
  color = white
  expName = design_ideation
  logging level = debug
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Routines
  Routine problem
    TextboxComponent design_problem
      bold = False
      borderColor = black
      color = black
      editable = False
      italic = True
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      text [set every repeat] = $problem
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    TextboxComponent title
      bold = True
      color = black
      editable = False
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      text = Consider the following design problem:
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    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        # Start time
        annot_start = time_fn()

        print(f'Problem {design_problems.thisN+1}')
      End Routine:
        # Stop time and send routine annotation
        annot_stop = time_fn()
        duration = annot_stop - annot_start

        annot = new_trigger(f'problem statement', duration, annot_start)
        annot['problem_id'] = problem_id
        send_trigger(annot)
        sleep(0.1)
  Routine crosshair
    CodeComponent cross_time
      Code Type = Py
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      Begin Experiment:
        # Generate 12 random durations for cross between 0.5-4 s
        cross_times = list(randint(5,40,12)/10)
      Begin Routine:
        # Popping random time from randomized duration list
        cross_duration = cross_times.pop()

        # Send routine annotation
        annot = new_trigger('crosshair', cross_duration)
        send_trigger(annot)
        sleep(0.1)
    PolygonComponent cross
      durationEstim = 4
      fillColor = black
      lineColor = black
      lineWidth = 0.1
      saveStartStop = False
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = cross_duration
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  Routine wordset_1
    TextboxComponent problem_1
      bold = True
      color = black
      editable = False
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every repeat] = $problem
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    KeyboardComponent skip_1
      allowedKeys = 'right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      store = nothing
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    CodeComponent code_3
      Code Type = Py
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      Begin Routine:
        # Init. counters and constants
        num_ideas = 0
        wordset = 1

        # Start time
        annot_start = time_fn()

        print('Wordset 1')

        if mic_on:
            # Start sound recording
            mic_recording_1 = sd.rec(int(rec_duration * fs))
      Each Frame:
        # Check for idea generations and send annotations
        if 'space' in defaultKeyboard.getKeys(['space']):
            time = wordset_1Clock.getTime()

            if time > 0.1: # Not record presses from early on
                annot = new_wordset_trigger('idea')
                annot['idea_timestamp'] = time

                send_trigger(annot)
                sleep(0.1)

                num_ideas += 1
      End Routine:
        # Stop time
        annot_stop = time_fn()
        duration = annot_stop - annot_start

        # Send annotations
        annot = new_wordset_trigger('wordset', duration, annot_start)
        annot['idea_total'] = num_ideas

        send_trigger(annot)
        sleep(0.1)
    TextboxComponent press_1
      bold = False
      color = black
      editable = False
      italic = True
      letterHeight = 0.03
      pos = (0.15, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text = Press <SPACE> each time you think of a new idea.
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    TextboxComponent border_1
      bold = False
      borderColor = black
      color = black
      editable = False
      italic = True
      letterHeight = 0.05
      padding = 0.1
      saveStartStop = False
      size = (1.3,0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text = $''
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    TextComponent word1_1
      color = black
      letterHeight = 0.05
      pos = (-0.45, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every repeat] = $word1
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    TextComponent word2_1
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every repeat] = $word2
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    TextComponent word3_1
      color = black
      letterHeight = 0.05
      pos = (0.45, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every repeat] = $word3
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  Routine wordset_2
    TextboxComponent problem_2
      bold = True
      color = black
      editable = False
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every repeat] = $problem
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    KeyboardComponent skip_2
      allowedKeys = 'right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      store = nothing
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    CodeComponent code_6
      Code Type = Py
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      Begin Routine:
        # Init. counters and constants
        num_ideas = 0
        wordset = 2

        # Screen coordinates for words
        firstRow_y = 0.03
        secondRow_y = -0.22

        # Set start time
        annot_start = time_fn()

        print('Wordset 2')

        if mic_on:
            # Start sound recording
            mic_recording_2 = sd.rec(int(rec_duration * fs))
      Each Frame:
        # Check for ideas generated and send annotations
        if 'space' in defaultKeyboard.getKeys(['space']):
            time = wordset_2Clock.getTime()

            if time > 0.5: # Not record presses from early on (as one-back)
                annot_time = time_fn()
                annot = new_wordset_trigger('idea', timestamp=annot_time)
                annot['idea_timestamp'] = time

                send_trigger(annot)
                sleep(0.1)

                num_ideas += 1
      End Routine:
        # Stop time
        annot_stop = time_fn()
        duration = annot_stop - annot_start

        #  Send annotation
        annot = new_wordset_trigger('wordset', duration, annot_start)
        annot['idea_total'] = num_ideas

        send_trigger(annot)
        sleep(0.1)
    TextboxComponent press_2
      bold = False
      color = black
      editable = False
      italic = True
      letterHeight = 0.03
      pos = (0.15, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text = Press <SPACE> each time you think of a new idea.
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    TextboxComponent border_2
      bold = False
      borderColor = black
      color = black
      editable = False
      italic = True
      letterHeight = 0.05
      padding = 0.1
      pos = (0, -0.1)
      saveStartStop = False
      size = (1.3,0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text = $''
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    TextComponent word1_2
      color = black
      letterHeight = 0.05
      pos [set every repeat] = (-0.45, firstRow_y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every repeat] = $word1
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    TextComponent word2_2
      color = black
      letterHeight = 0.05
      pos [set every repeat] = (0, firstRow_y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every repeat] = $word2
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    TextComponent word3_2
      color = black
      letterHeight = 0.05
      pos [set every repeat] = (0.45, firstRow_y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every repeat] = $word3
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    TextComponent word4_2
      color = black
      letterHeight = 0.05
      pos [set every repeat] = (-0.25, secondRow_y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every repeat] = $word4
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    TextComponent word5_2
      color = black
      letterHeight = 0.05
      pos [set every repeat] = (0.25, secondRow_y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every repeat] = $word5
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    TextComponent line
      color = black
      letterHeight = 0.05
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text = -  -  -  -  -  -  -
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  Routine one_back_instr
    ImageComponent one_back_illustration
      durationEstim = 10
      image = Media\one_back.png
      pos = (0.45, 0)
      saveStartStop = False
      size = 0.55
      startVal [time (s)] = 0.0
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    TextboxComponent one_back_text
      bold = False
      color = black
      durationEstim = 10
      editable = False
      letterHeight = 0.035
      pos = (-0.3, 0)
      saveStartStop = False
      size = [0.8,0.6]
      startVal [time (s)] = 0.0
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      text:
        Between the design ideation, a simple memory task called "1-back" will be performed.

        Your goal is to indicate if a letter is similar to the previous one by pressing <SPACE>.
        If they are different from each other, no action is required. Each letter will be shown for appx. 2 seconds or until <SPACE> is pressed.

        An example is shown in the illustration to the right.
    TextboxComponent instr_begin
      bold = False
      color = black
      durationEstim = 10
      editable = False
      italic = True
      letterHeight = 0.03
      pos = (0.2, -0.40)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press <SPACE> to begin the experiment. 
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    KeyboardComponent one_back_instr_click
      allowedKeys = 'space'
      durationEstim = 10
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        # Start time
        annot_start = time_fn()

        print('1-back instructions')
      End Routine:
        # Stop time and send routine annotation
        annot_stop = time_fn()
        duration = annot_stop - annot_start

        annot = new_trigger('oneback-instructions', duration, annot_start)
        send_trigger(annot)
        sleep(0.1)
  Routine thanks
    CodeComponent code_5
      Code Type = Py
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      Before Experiment:
        # Import lib for time conversion
        import datetime
      Begin Routine:
        # Set time and convert to time for text
        total_seconds = time_fn()
        time_string = str(datetime.timedelta(seconds=int(total_seconds)))

        print('Exp. over')

        # Send routine annotation
        annot = new_trigger('experiment over', timestamp=total_seconds)
        send_trigger(annot)
        sleep(0.1)
      End Routine:
        # Stop Pupil recording
        pupil_remote.send_string("r")
        pupil_remote.recv_string()
        sleep(0.1)
    TextComponent thanks_text
      color = black
      letterHeight = 0.08
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = Thank you for taking part in the experiment!
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    TextComponent time_text
      color = black
      letterHeight = 0.08
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $f'Total time: {time_string}'
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  Routine feedback
    TextComponent question_title
      color = black
      durationEstim = 10
      letterHeight = 0.06
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text [set every repeat] = $question
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    TextComponent min_label
      color = black
      durationEstim = 10
      letterHeight = 0.05
      pos = (-0.5, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text [set every repeat] = $label_min.split(' ')[0] + '\n' + label_min.split(' ')[1]
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    TextComponent max_label
      color = black
      durationEstim = 10
      letterHeight = 0.05
      pos = (0.5, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text [set every repeat] = $label_max.split(' ')[0] + '\n' + label_min.split(' ')[1]
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    ImageComponent one
      durationEstim = 10
      image = Media\one.png
      pos = (-0.5, 0)
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.5
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    ImageComponent two
      durationEstim = 10
      image = Media\two.png
      pos = (-0.25, 0)
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.5
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    ImageComponent three
      durationEstim = 10
      image = Media\three.png
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.5
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    ImageComponent four
      durationEstim = 10
      image = Media\four.png
      pos = (0.25, 0)
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.5
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    ImageComponent five
      durationEstim = 10
      image = Media\five.png
      pos = (0.5, 0)
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.5
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    TextboxComponent instr_feedback
      bold = False
      color = black
      durationEstim = 10
      editable = False
      italic = True
      letterHeight = 0.03
      pos = (0.15, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = Use the mouse and left-click your rating of choice.
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    MouseComponent feedback_click
      clickable = one,two,three,four,five
      durationEstim = 10
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveParamsClickable = name
      saveStartStop = False
      startVal [time (s)] = 0.5
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    CodeComponent feedback_code
      Code Type = Py
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      Begin Experiment:
        # Define mapping from string to int
        word2int = {'one': 1, 'two': 2, 'three': 3, 'four': 4, 'five': 5}
      Begin Routine:
        # Set start time only on first question
        if feedback_questions.thisN == 0:
            print('Feedback')
            annot_start = time_fn()
            answers = []
      End Routine:
        # Mapping and appending answers
        ans = word2int[feedback_click.clicked_name[0]]
        answers.append((question_id, ans))

        # On last question send routine annotation
        if feedback_questions.thisN == 3:
            annot_stop = time_fn()
            duration = annot_stop - annot_start

            annot = new_wordset_trigger('feedback', duration, annot_start)

            # Add answers to annotation
            for a in answers:
                annot[f'feedback_{a[0]}'] = a[1]
            send_trigger(annot)
            sleep(0.1)
  Routine one_back_begin
    TextComponent one_back_begin_text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5
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      text:
        1-Back memory task will soon begin.

        Press <SPACE> if the letter is similar to the previous one.
    CodeComponent one_back_setup
      Code Type = Py
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      Begin Experiment:
        # Init. total number of n-backs and subset of letters
        num_one_back = 50
        letters = ['A', 'B', 'C', 'D', 'E', 'F', 'G', 'H', 'I', 'J', 'K', 'L']
      Begin Routine:
        print('1-back setup')

        # Init. counters to zero
        correct = 0
        total = 0

        # Init. letters for oneback
        p = 0.4 # Prob. of "true" stim
        bool_mask = randchoice([True, False], size=(num_one_back),p=[p,1-p])

        first_letter = randchoice(letters)
        one_back_stim = []

        # Generate letters for oneback
        for i in range(num_one_back):
            prev_stim = first_letter if i == 0 else one_back_stim[i-1]

            if bool_mask[i]:
                one_back_stim.append(prev_stim)
            else:
                new_stim = randchoice([x for x in letters if x!= prev_stim])
                one_back_stim.append(new_stim)
      End Routine:
        # Begin timer after first_letter
        one_back_timer = core.CountdownTimer(22)

        annot_start = time_fn()
    TextComponent one_back_start_letter
      color = black
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 5.75
      stopVal [duration (s)] = 2
      text [set every repeat] = $first_letter
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  Routine one_back
    CodeComponent one_back_code
      Code Type = Py
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      Begin Routine:
        # Set n to current iter in one-back loop
        n = currentLoop.thisN

        # Init stims.
        curr_stim = one_back_stim[n]
        prev_stim = first_letter if n == 0 else one_back_stim[n-1]
      Each Frame:
        # Stop when one-back task timer is up
        if one_back_timer.getTime() < 0:
            # Send one-back routine annotations
            annot_stop = time_fn()
            duration = annot_stop - annot_start

            annot = new_trigger('oneback', duration, annot_start)
            annot['problem_id'] = problem_id
            annot['oneback_correct'] = correct
            annot['oneback_total'] = total
            annot['oneback_score'] = correct/total
            send_trigger(annot)
            sleep(0.1)

            continueRoutine = False
            currentLoop.finished = True

        # Max 2 seconds per letter
        if one_backClock.getTime() >= 2.0:
            if not bool_mask[n]: #curr_stim != prev_stim:
                correct += 1
                total += 1
            else:
                total += 1

            continueRoutine = False

        # Check for space key press (and right for skip)
        press_time = one_backClock.getTime()
        pressed_keys = defaultKeyboard.getKeys(['space', 'right'])

        if 'space' in pressed_keys and press_time >= 0.25:
            if bool_mask[n]: #curr_stim == prev_stim:
                # Add only reaction time for correct "pushes"
                reaction_time = press_time - 0.25 #due to 0.25 delay

                # Send annotation with reaction time
                annot = new_trigger('oneback_reaction')
                annot['problem_id'] = problem_id
                annot['oneback_reactiontime'] = reaction_time
                send_trigger(annot)
                sleep(0.05)

                correct += 1
                total += 1
            else:
                total += 1

            continueRoutine = False

        # For skipping
        if 'right' in pressed_keys:
            continueRoutine = False
            currentLoop.finished = True
    TextComponent stim_text
      color = black
      durationEstim = 2
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 0.25
      text [set every repeat] = $curr_stim
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  Routine instr
    TextboxComponent instructions
      bold = False
      color = black
      editable = False
      letterHeight = 0.035
      pos = (0,0.12)
      saveStartStop = False
      size = (1.2,0.5)
      startVal [time (s)] = 0.0
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      text:
        In this experiment you will be asked to come up with concept solutions to open ended design problems.

        During some problems you may receive a set of words which are intended to serve as inspiration for your concepts. You will see a total of 12 design problems. For each problem you will have 2 minutes to develop as many concepts as you can.
        In other words, the goal is to generate as many ideas as possible. You do not need to consider realism or whether the concept already exists. You are to think aloud during ideation, that means saying whatever comes into your mind.

        Each time you think of a new concept, indicate it by pressing <SPACE>. Please speak English.
    TextboxComponent instr_continue
      bold = False
      color = black
      editable = False
      italic = True
      letterHeight = 0.03
      pos = (0.3, -0.40)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press <SPACE> to continue.
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    KeyboardComponent instr_stop
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    CodeComponent code_instr
      Code Type = Py
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      Begin Routine:
        # Start time
        annot_start = time_fn()

        print('Instructions')
      End Routine:
        # Stop time and send routine annotation
        annot_stop = time_fn()
        duration = annot_stop - annot_start

        annot = new_trigger('instructions', duration, annot_start)
        send_trigger(annot)
        sleep(0.1)
  Routine calibration
    CodeComponent calib_code
      Code Type = Py
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      Begin Routine:
        # Start time
        annot_start = time_fn()

        print('Calibration')
      End Routine:
        # Stop time and send routine annotation
        annot_stop = time_fn()
        duration = annot_stop - annot_start

        annot = new_trigger('calibration', duration, annot_start)
        send_trigger(annot)
        sleep(0.1)
    KeyboardComponent start_exp
      allowedKeys = 'space'
      durationEstim = 60
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5
      store = nothing
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    TextboxComponent calib_text
      autoLog = False
      bold = False
      color = black
      durationEstim = 80
      editable = False
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome!
        First we need to calibrate the eye-tracking device properly. Please follow the instructions given by the researcher.

        When asked to proceed, please press <SPACE>.
  Routine init
    CodeComponent init_code
      Code Type = Py
      Before Experiment:
        # Set mic related functions on/off
        mic_on = True

        # Import microphone module for recording
        if mic_on:
            import sounddevice as sd
            from scipy.io.wavfile import write as wav_write

        # Import libraries for Pupil communication
        import zmq
        import msgpack as serializer
        from time import sleep
      Begin Experiment:
        # Define constants from exp. input
        participant_id = expInfo['participant']
        group_id = expInfo['group'].upper()

        # Set to debug
        # logging.console.setLevel(logging.DEBUG)

        if mic_on:
            # Make and set directory for recordings to be saved
            recordingDir = _thisDir + fr"\Data\Sound recordings\participant_{expInfo['participant']}"
            os.mkdir(recordingDir)

            # Set recording params
            fs = 48000
            rec_duration = 65 # Record the entire wordet routine + extra in n-back

            # Set default parameters
            sd.default.samplerate = fs
            sd.default.channels = 1 # Mono sound
            sd.default.dtype = 'int16' # So that it can be used with speech recognition
      Begin Routine:
        print('Init')

        '''
        Scripts and time synchronization and annotaions - based on:
         - https://github.com/pupil-labs/pupil-helpers/blob/master/python/pupil_remote_control.py
         - https://github.com/pupil-labs/pupil-helpers/blob/master/python/remote_annotations.py
        '''

        # Setup zmq context and remote helper
        ctx = zmq.Context()
        pupil_remote = zmq.Socket(ctx, zmq.REQ)
        pupil_remote.connect("tcp://127.0.0.1:50020")

        pupil_remote.send_string("PUB_PORT")
        pub_port = pupil_remote.recv_string()
        pub_socket = zmq.Socket(ctx, zmq.PUB)
        pub_socket.connect("tcp://127.0.0.1:{}".format(pub_port))

        # Set time function to Psychopy's globalClock - time since experiment started
        time_fn = globalClock.getTime

        # Set Pupil Capture's time base to match Psychopy's experiment clock
        pupil_remote.send_string("T {}".format(time_fn()))
        print(pupil_remote.recv_string())

        sleep(1)
        '''This was added post-experiment.
        No sleep before record is believed to cause issues with certain plugins in Pupil Player
        due to some data is timestamped with a value much larger than the new zeroed timestamp.

        See: https://discord.com/channels/285728493612957698/285728493612957698/857998442999578664
        '''
        # Function for sending notifications
        def notify(notification):
            """Sends ``notification`` to Pupil Remote"""
            topic = "notify." + notification["subject"]
            payload = serializer.dumps(notification, use_bin_type=True)
            pupil_remote.send_string(topic, flags=zmq.SNDMORE)
            pupil_remote.send(payload)
            return pupil_remote.recv_string()

        # Packing notification data
        def send_trigger(trigger):
            payload = serializer.dumps(trigger, use_bin_type=True)
            pub_socket.send_string(trigger["topic"], flags=zmq.SNDMORE)
            pub_socket.send(payload)

        # Start the annotations plugin
        notify({"subject": "start_plugin", "name": "Annotation_Capture", "args": {}})

        # Start recording - setting filename to participant_id
        pupil_remote.send_string(f"R participant_{expInfo['participant']}")
        pupil_remote.recv_string()
        sleep(0.5)

        '''
        A lot of the variables used in the triggers are loaded globally from the scope.
        Some are loaded from the xlsx input files and updates on each iteration in the design problem loop.

        E.g. participant_id, word1, wordset, stimuli...
        '''

        # Minimal trigger - defaults to current time and duration == 0.0
        def new_trigger(label, duration=0.0, timestamp=None):
            if timestamp is None:
                timestamp = time_fn()
            return {
                "topic": "annotation",
                "label": label,
                "timestamp": timestamp,
                "duration": duration,
                "participant_id": participant_id,
                "group_id": group_id
            }

        # Trigger with more info, includes stimuli info. Same default values as above
        def new_wordset_trigger(label, duration=0.0, timestamp=None):
            if timestamp is None:
                timestamp = time_fn()
            return {
                "topic": "annotation",
                "label": label,
                "timestamp": timestamp,
                "duration": duration,
                "participant_id": participant_id,
                "group_id": group_id,
                "problem_id": problem_id,
                "stimuli": stimuli,
                "wordset": wordset,
                "word1": word1,
                "word2": word2,
                "word3": word3,
                "word4": word4,
                "word5": word5
            }

        # Send annotation
        annot = new_trigger('initialization')
        send_trigger(annot)
        sleep(0.1)
  Routine save_rec
    CodeComponent save_code
      Code Type = Py
      Begin Routine:
        # Save files in case of delay due
        if mic_on:
            # File names for recording of each wordset
            mic_filename_1 = recordingDir + fr'\participant_{participant_id}_problem{problem_id}_{stimuli}_wordset1.wav'
            mic_filename_2 = recordingDir + fr'\participant_{participant_id}_problem{problem_id}_{stimuli}_wordset2.wav'

            # Save both recordings
            wav_write(mic_filename_1, fs, mic_recording_1)
            wav_write(mic_filename_2, fs, mic_recording_2)
Flow
  Routine init
  Routine calibration
  Routine instr
  Routine one_back_instr
  LoopInitiator design_problems loopType="TrialHandler"
    conditionsFile = $f"input_{expInfo['group']}.xlsx"
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine problem
    Routine crosshair
    Routine wordset_1
    Routine one_back_begin
    LoopInitiator one_back_loop_one loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = num_one_back
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      Routine one_back
    LoopTerminator one_back_loop_one
    Routine wordset_2
    LoopInitiator feedback_questions loopType="TrialHandler"
      conditionsFile = questions.xlsx
      isTrials = False
      loopType = sequential
      nReps = 1
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      conditions:
        [{'question_id': 'useful', 'question': 'How USEFUL were the words presented with this design problem?'},
        {'question_id': 'relevant', 'question': 'How RELEVANT were the words presented with this design problem?'},
        {'question_id': 'novelty', 'question': 'How was the overall NOVELTY (uniqueness) of the solutions you developed for this design problem?'},
        {'question_id': 'quality', 'question': 'How was the overall QUALITY (uniqueness) of the solutions you developed for this design problem?'}]
      Routine feedback
    LoopTerminator feedback_questions
    Routine one_back_begin
    LoopInitiator one_back_loop_two loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = num_one_back
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      Routine one_back
    LoopTerminator one_back_loop_two
    Routine save_rec
  LoopTerminator design_problems
  Routine thanks
